<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xmlns="http://gadgetron.sf.net/gadgetron" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd">
	<gadget>
		<name>LoadIsmrmrdDatasetImages</name>
		<dll>cfmm_gadgets</dll>
		<classname>LoadIsmrmrdDatasetImages</classname>
		<property>
			<name>filename</name>
		</property>
		<property>
			<name>groupname</name>
			<value>images</value>
		</property>
		<property>
			<name>varname</name>
			<value>complex</value>
		</property>
	</gadget>
	<gadget>
		<name>DecrementIndex</name>
		<dll>gadgetron_PUROR</dll>
		<classname>DecImageIndex</classname>
	</gadget>
	<gadget>
		<name>GetMasks</name>
		<dll>gadgetron_PUROR</dll>
		<classname>GetMaskGadget</classname>
	</gadget>
	<gadget>
		<name>Unwrap</name>
		<dll>gadgetron_PUROR</dll>
		<classname>UnwrapGadget</classname>
		 <property><name>threads</name><value>6</value></property>
	</gadget>
	<gadget>
		<name>SaveIsmrmrdDatasetImages</name>
		<dll>cfmm_gadgets</dll>
		<classname>SaveIsmrmrdDatasetImages</classname>
		<property>
			<name>filename</name>
		</property>
		<property>
			<name>groupname</name>
			<value>images</value>
		</property>
		<property>
			<name>varname</name>
			<value>phase</value>
		</property>
		<property>
			<name>pass_on_undesired_data</name>
			<value>true</value>
		</property>
	</gadget>
	<gadget>
		<name>HighPassFilter</name>
		<dll>gadgetron_PUROR</dll>
		<classname>HPFGadget</classname>
		<property>
			<name>sigma</name>
			<value>.005</value>
		</property>
	</gadget>
	<gadget>
		<name>Accumulator</name>
		<dll>gadgetron_PUROR</dll>
		<classname>IEVChannelSumGadget</classname>
	</gadget>
<!--	<gadget>
		<name>AddMag</name>
		<dll>gadgetron_PUROR</dll>
		<classname>AddMag</classname>
	</gadget>
	<gadget>
		<name>Contrast</name>
		<dll>gadgetron_PUROR</dll>
		<classname>ContrastGadget</classname>
		<property>
			<name>pass_on</name>
			<value>1</value>
		</property>
	</gadget>-->
	<gadget>
		<name>AutoScaleEntireImage</name>
		<dll>cfmm_gadgets</dll>
		<classname>AutoScaleEntireImage</classname>
		<property>
		<name>numEchos</name>
		</property>
		<property>
		<name>is_signed</name>
		<value>true</value>
		</property>
	</gadget>
	<gadget>
		<name>DICOMStream</name>
		<dll>cfmm_gadgets</dll>
		<classname>DicomStream</classname>
	</gadget>
	<gadget>
		<name>AddDicomSlopeIntercept</name>
		<dll>gadgetron_PUROR</dll>
		<classname>AddSlopeIntercept</classname>
	</gadget>
	<gadget>
		<name>DICOMSave</name>
		<dll>cfmm_gadgets</dll>
		<classname>DicomSave</classname>
		<property>
		<name>dicom_dir</name>
		</property>
	</gadget>
</gadgetronStreamConfiguration>
